PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = ANT
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine Welcome
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    TextComponent Welcome_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Te damos la bienvenida.

        En seguida te presentaremos una tarea de tiempos de reacción.

        Coloca tus dedos indices en las teclas F y J del teclado.

        [Presiona la barra espaciadora para continuar...]
    KeyboardComponent Welcome_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Intro
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    TextComponent Intro_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Presiona la tecla correspondiente a la direccion de la flecha central.

        Si la flecha central apunta a la derecha >:
        >>>>> Presiona J <<><<

        Si la flecha central apunta a la izquierda <:
        <<<<< Presiona F >><>>

        Ignora los distractores.

        [Presiona barra espacadora para continuar...]
    KeyboardComponent Intro_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Fix
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    PolygonComponent Fix_cross
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fix_duration
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    CodeComponent Fix_code
      Code Type = Auto->JS
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      Before Experiment:
        import random
      Begin Experiment:
        fix_duration = .400
      Begin Routine:
        fix_duration = .400 + random.uniform(0.0, 1.2)
  Routine Cue
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    PolygonComponent Cue_cross
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0
      stopVal [duration (s)] = .4
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    TextComponent Cue_text_1
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
      text = *
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    TextComponent Cue_text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
      text = *
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    CodeComponent Cue_code
      Code Type = Py
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      Before Experiment:
        import numpy as np
      Begin Routine:
        if cue == "NC":
            cue_pos1 = [0.0,  1.5] # hide Cue_text_1
            cue_pos2 = [0.0, -1.5] # hide Cue_text_2
        elif cue == "CC":
        #    Position both cue texts at 0.0
            cue_pos1 = cue_pos2 = [0.0, 0.0]
        elif cue == "DC":
            cue_pos1 = [0.0,  .25]
            cue_pos2 = [0.0, -.25]
        elif cue == "SC":
            if np.random.rand() >= 0.5:
                cue_pos1 = cue_pos2 = [0.0,  .25]
            else:
                cue_pos1 = cue_pos2 = [0.0, -.25]
        Cue_text_1.pos = cue_pos1
        Cue_text_2.pos = cue_pos2
  Routine Target
    RoutineSettingsComponent Target
      stopVal [duration (s)] = 1.7
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    PolygonComponent Target_cross
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.7
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    TextComponent Target_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.7
      text [set every repeat] = >>>>>
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    CodeComponent Target_code
      Code Type = Py
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      Begin Routine:
        Target_text.text = target
        if cue == "SC":
            p = np.sign(cue_pos1[1])
        else:
            p = np.random.choice([-1,1])

        Target_text.pos = [0.0, p*0.25]
    KeyboardComponent key_resp
      allowedKeys = 'f', 'j'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Blank
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    PolygonComponent Blank_cross
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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  Routine BlockEnd
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    TextComponent BlockEnd_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $f"""Este es el final del bloque {b}.

        Puedes tomar una pausa.

        [Presiona barra espaciadora para continuar...]
        """
    KeyboardComponent BlockEnd_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine End
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    TextComponent End_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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      text:
        Este es el fin de la prueba.

        Gracias por participar!
Flow
  Routine Welcome
  Routine Intro
  LoopInitiator Blocks loopType="TrialHandler"
    conditionsFile = Lists/Blocks.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('b', 1)]),
      OrderedDict([('b', 2)]),
      OrderedDict([('b', 3)]),
      OrderedDict([('b', 4)])]
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = Lists/Trials.csv
      loopType = fullRandom
      nReps = 5
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      conditions:
        [OrderedDict([('cue', 'NC'), ('target', '<<<<<'), ('correct', 'f')]),
        OrderedDict([('cue', 'CC'), ('target', '<<<<<'), ('correct', 'f')]),
        OrderedDict([('cue', 'DC'), ('target', '<<<<<'), ('correct', 'f')]),
        OrderedDict([('cue', 'SC'), ('target', '<<<<<'), ('correct', 'f')]),
        OrderedDict([('cue', 'NC'), ('target', '>>>>>'), ('correct', 'j')]),
        OrderedDict([('cue', 'CC'), ('target', '>>>>>'), ('correct', 'j')]),
        OrderedDict([('cue', 'DC'), ('target', '>>>>>'), ('correct', 'j')]),
        OrderedDict([('cue', 'SC'), ('target', '>>>>>'), ('correct', 'j')]),
        OrderedDict([('cue', 'NC'), ('target', '>><>>'), ('correct', 'f')]),
        OrderedDict([('cue', 'CC'), ('target', '>><>>'), ('correct', 'f')]),
        OrderedDict([('cue', 'DC'), ('target', '>><>>'), ('correct', 'f')]),
        OrderedDict([('cue', 'SC'), ('target', '>><>>'), ('correct', 'f')]),
        OrderedDict([('cue', 'NC'), ('target', '<<><<'), ('correct', 'j')]),
        OrderedDict([('cue', 'CC'), ('target', '<<><<'), ('correct', 'j')]),
        OrderedDict([('cue', 'DC'), ('target', '<<><<'), ('correct', 'j')]),
        OrderedDict([('cue', 'SC'), ('target', '<<><<'), ('correct', 'j')])]
      Routine Fix
      Routine Cue
      Routine Target
    LoopTerminator trials
    Routine BlockEnd
  LoopTerminator Blocks
  Routine End
